PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'01'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [2560, 1440]
  color = black
  expName = stroop
  logging level = warning
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    KeyboardComponent resp
      allowedKeys = 'z', 'm'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        z for red LETTERS
        m for green LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please press;
        z for red LETTERS
        m for green LETTERS
        (Esc will quit)

        Let's start with a few practice trials

        Press any key to continue
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback
    CodeComponent message
      Code Type = Py
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = stroop-replication-trialtypes.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'text': 'red', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'congruent'},
      {'text': 'red', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'incong'},
      {'text': 'green', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'incong'},
      {'text': 'green', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'congruant'}]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop-replication-trialtypes.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 10
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    conditions:
      [{'text': 'red', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'congruent'},
      {'text': 'red', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'incong'},
      {'text': 'green', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'incong'},
      {'text': 'green', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'congruant'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
